CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Noyaux
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFPcell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Texas")
    Name to assign these images:TexasRedcells
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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enabled:False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
    Select the input image:Noyaux
    Name the output image:CropNuclei
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1000,end
    Top and bottom rectangle positions:1250,end
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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enabled:False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
    Select the input image:GFPcell
    Name the output image:CropGFP
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1000,end
    Top and bottom rectangle positions:1250,end
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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enabled:False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
    Select the input image:TexasRedcells
    Name the output image:CropTR
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1000,end
    Top and bottom rectangle positions:1250,end
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Noyaux
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.36,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:TexasRedcells
    Name the primary objects to be identified:TexasRedSpot
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:GFPcellsegmented
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFPcell
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.01
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.006,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:11|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enabled:False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
    Select the input objects:Noyaux
    Name the objects to be identified:TRsegmentedcells
    Select the method to identify the secondary objects:Propagation
    Select the input image:TexasRedcells
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.01
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:GFPcellsegmented
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmGFP
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:13|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enabled:False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
    Select the larger identified objects:TRsegmentedcells
    Select the smaller identified objects:Noyaux
    Name the tertiary objects to be identified:CytoplasmTR
    Shrink smaller object prior to subtraction?:Yes

RelateObjects:[module_num:14|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
    Parent objects:GFPcellsegmented
    Child objects:TexasRedSpot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
TrackObjects:[module_num:15|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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:Nuclei
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
TrackObjects:[module_num:16|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
    Choose a tracking method:Overlap
    Select the objects to track:GFPcellsegmented
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCellsGFP
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
TrackObjects:[module_num:17|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
    Choose a tracking method:Overlap
    Select the objects to track:TexasRedSpot
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCellsTR
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Noyaux
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Documents\\\\\\\\test CellProfiler Irina\\\\\\\\test CellProfiler Irina\\\\\\\\DATA2 Irina
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TrackedCellsGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFPcell
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Documents\\\\\\\\test CellProfiler Irina\\\\\\\\test CellProfiler Irina\\\\\\\\DATA2 Irina
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:TrackedCellsTR
    Select method for constructing file names:From image filename
    Select image name for file prefix:TexasRedcells
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Documents\\\\\\\\test CellProfiler Irina\\\\\\\\test CellProfiler Irina\\\\\\\\DATA2 Irina
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:21|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
    Hidden:1
    Select an image to measure:GFPcell
    Select objects to measure:GFPcellsegmented

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\\\\\\\\test CellProfiler Irina\\\\\\\\test CellProfiler Irina\\\\\\\\DATA2 Irina
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Resultats mesure fluo
    Overwrite existing files without warning?:No
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