CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_d(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:H2AX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['A rescale intensity function was applied to rescale the intensity of the DAPI images by setting the brightest pixel in the picture to 1 and the darkest pixel to 0.']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
    Select the input image:DAPI
    Name the output image:RescaleNucleiIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.06
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:6|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notes:['A rescale intensity function was applied to rescale the intensity of the GFP images by setting the brightest pixel in the picture to 1 and the darkest pixel to 0.']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
    Select the input image:GFP
    Name the output image:RescaleTubulinIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.06
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:7|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notes:['A rescale intensity function was applied to rescale the intensity of the H2AX images by setting the brightest pixel in the picture to 1 and the darkest pixel to 0.']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
    Select the input image:H2AX
    Name the output image:RescaleActinIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.06
    Intensity range for the output image:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:["Segmentation process was completed using minimum cross entropy with a global strategy. Specifically the following parameters were set: Cells outside of the diameter range: 220 < diameter < 35000 aren't rejected. Cells touching the border are rejected. Global MCE thresholding was used with a threshold smoothing scale of 1.3488 and a threshold correction value of 1. Objects were separated set by their intensity With a automatic declumping smoothing filter. Declumping was suppressed with an automatic local maxima. Image was not downsized from declumping."]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
    Select the input image:RescaleTubulinIntensity
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):220,35000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:9|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notes:['DAPI stained nuclei were detected as primary objects. Too small objects as well as nuclei touching the border of the image were set to be eliminated from the analysis.']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
    Select the input image:RescaleNucleiIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:10|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notes:['RelateObjects relates each nucleus object to its â\x80\x9cparentâ\x80\x9d Cell']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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:11|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notes:['Measure morphological features such as : area, perimeter, eccentricity, majorAxisLength, MinorAxisLength, Orientation, FormFactor.']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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure object intensity features such as integrated intensity, mean, median or standard deviation intensities, maximal and minimal pixel intensities, lower and upper quartile.']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
    Select images to measure:RescaleTubulinIntensity
    Select objects to measure:Cells

FilterObjects:[module_num:13|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notes:['Apply filter on number of nuclei and area of cells. Cells with < 3 nuclei and area < 4000 px are reject']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
    Select the objects to filter:Cells
    Name the output objects:FilterCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:4000
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:FilterCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExpandOrShrinkObjects:[module_num:15|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notes:["10 is a number of pixels to shrink cells  -> It's the internal content of the cell."]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
    Select the input objects:FilterCells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:16|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notes:["8 is a number of pixels to shrink cells -> It's the internal content of the cell."]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
    Select the input objects:FilterCells
    Name the output objects:ShrunkenCells_2
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:17|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notes:['Identify subregion. Substracts ShrunkenCells from FilterCells to obtain peripheral Tubulin.']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
    Select the larger identified objects:FilterCells
    Select the smaller identified objects:ShrunkenCells
    Name the tertiary objects to be identified:peripheral_tubulin
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:18|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notes:['Identify subregion. Substracts ShrunkenCells_2 from FilterCells to obtain peripheral actin.']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
    Select the larger identified objects:FilterCells
    Select the smaller identified objects:ShrunkenCells_2
    Name the tertiary objects to be identified:peripheral_actin
    Shrink smaller object prior to subtraction?:Yes

OverlayOutlines:[module_num:19|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notes:['display cell by add a blue outline']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleTubulinIntensity
    Name the output image:CellsFilteredOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:blue
    Select objects to display:Cells

OverlayOutlines:[module_num:20|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notes:['Display peripheral actin by add an orange outline']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleActinIntensity
    Name the output image:ActinOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FF8000
    Select objects to display:peripheral_actin

OverlayOutlines:[module_num:21|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notes:['Display peripheral Tubulin by add a green outline.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleTubulinIntensity
    Name the output image:TubulinOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#008000
    Select objects to display:peripheral_tubulin

DisplayDataOnImage:[module_num:22|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notes:['Display a number of each filtered cells.']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
    Display object or image measurements?:Object
    Select the input objects:FilterCells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:CellsFilteredOverlay
    Text color:red
    Name the output image that has the measurements displayed:NumberOfFilteredCells
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:23|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notes:['Images of objects were saved']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
    Select the type of image to save:Image
    Select the image to save:CellsFilteredOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/example/final
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:ActinOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:H2AX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_actin
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/example/final
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:TubulinOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tubulin
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/example/final
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:26|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notes:['Measure morphological features such as : area, perimeter, eccentricity, majorAxisLength, MinorAxisLength, Orientation, FormFactor.']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
    Select object sets to measure:peripheral_actin, peripheral_tubulin, ShrunkenCells_2, ShrunkenCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:27|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notes:['Measure object intensity features such as integrated intensity, mean, median or standard deviation intensities, maximal and minimal pixel intensities, lower and upper quartile.']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
    Select images to measure:RescaleActinIntensity, RescaleTubulinIntensity
    Select objects to measure:peripheral_actin, peripheral_tubulin, ShrunkenCells_2, ShrunkenCells

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/example/final
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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