CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ExperimentName>.*)_(?P<Well>[A-Z][0-9]{1,2})f(?P<Field>[0-9]{1,3})d(?P<Channel>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load one image from the full set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:["Perform illumination correction using the Background method and a polynomial smoothing method. Background method because it's show the pattern of the illumination. The illumination pattern varies between different images in the set so we apply this backgrounf function for each image. Fit polynomial function because we see bright region towards edge of the wells and darker in the middle.  "]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
    Select the input image:Tubulin
    Name the output image:IllumTubulin
    Select how the illumination function is calculated:Background
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    Block size:95
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['This module applies the illumination correction functions. The option to “Divide” or “Subtract” depends on the method', 'used in the CorrectIlluminationCalculate module. When the “Background” option is used in the CorrectIlluminationCalculate module, “Subtract” is used in the CorrectIlluminationApply module as described in the module help.']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
    Select the input image:Tubulin
    Name the output image:CorrTubulin
    Select the illumination function:IllumTubulin
    Select how the illumination function is applied:Subtract

CorrectIlluminationCalculate:[module_num:7|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notes:["Perform illumination correction using the Background method and a polynomial smoothing method. Background method because it's show the pattern of the illumination. The illumination pattern varies between different images in the set so we apply this backgrounf function for each image. Fit polynomial function because we see bright region towards edge of the wells and darker in the middle. "]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
    Select the input image:Actin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Background
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    Block size:95
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['This module applies the illumination correction functions. The option to “Divide” or “Subtract” depends on the method', 'used in the CorrectIlluminationCalculate module. When the “Background” option is used in the CorrectIlluminationCalculate module, “Subtract” is used in the CorrectIlluminationApply module as described in the module help.']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
    Select the input image:Actin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Subtract

CorrectIlluminationCalculate:[module_num:9|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notes:["Perform illumination correction using the Background method and a polynomial smoothing method. Background method because it's show the pattern of the illumination. The illumination pattern varies between different images in the set so we apply this backgrounf function for each image. Fit polynomial function because we see bright region towards edge of the wells and darker in the middle. "]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
    Select the input image:Nuclei
    Name the output image:IllumNuclei
    Select how the illumination function is calculated:Background
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    Block size:95
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['This module applies the illumination correction functions. The option to “Divide” or “Subtract” depends on the method', 'used in the CorrectIlluminationCalculate module. When the “Background” option is used in the CorrectIlluminationCalculate module, “Subtract” is used in the CorrectIlluminationApply module as described in the module help.']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
    Select the input image:Nuclei
    Name the output image:CorrNuclei
    Select the illumination function:IllumNuclei
    Select how the illumination function is applied:Subtract

SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrTubulin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/HCS/AnneBlangy/screen3/170704_screen3_plqe1_ST/corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/HCS/AnneBlangy/screen3/170704_screen3_plqe1_ST/corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclei
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/HCS/AnneBlangy/screen3/170704_screen3_plqe1_ST/corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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